PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine thankyou
    TextComponent text_2
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
      text = THANKYOU 
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  Routine simple
    PolygonComponent fixation
      fillColor = -1.0000, -1.0000, 1.0000
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent fixation2
      fillColor = 0.8824, 0.9451, 1.0000
      shape = circle
      size = (0.5,0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'l','r'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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  Routine choice
    PolygonComponent fixation3
      fillColor = white
      ori = 90
      pos [set every repeat] = (pos, 0)
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent fixation4
      fillColor = white
      ori = 90
      pos [set every repeat] = (pos, 0)
      shape = circle
      size = (150, 150)
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 1.0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'l','r'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 7.0
      storeCorrect = True
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  Routine ins1
    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Click l when you see a light

        click l when you see circle at left side and
        click r when you see cirlce at right side
Flow
  Routine ins1
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine simple
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Book1.xlsx
    loopType = random
    nReps = 150
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    conditions:
      [{'pos': 50, 'corr_resp': 'r'},
      {'pos': -150, 'corr_resp': 'L'}]
    Routine choice
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine thankyou
  LoopTerminator trials_3
